
/control/execute mac/verbose.mac

#=====================================================
# GEOMETRY
#=====================================================

/gate/geometry/setMaterialDatabase data/GateMaterials.db

# World
/gate/world/geometry/setXLength 1 m
/gate/world/geometry/setYLength 1 m
/gate/world/geometry/setZLength 1 m
/gate/world/setMaterial G4_AIR


# Global Box
/gate/world/daughters/name              waterbox
/gate/world/daughters/insert            box
/gate/waterbox/geometry/setXLength      20 cm
/gate/waterbox/geometry/setYLength      20 cm
/gate/waterbox/geometry/setZLength      20 cm
/gate/waterbox/placement/setTranslation 0.0 0.0 15 cm
/gate/waterbox/setMaterial G4_WATER
/gate/waterbox/vis/setVisible 1
/gate/waterbox/vis/setColor blue

#=====================================================
# PHYSICS
#=====================================================

/gate/physics/addPhysicsList QGSP_BERT_EMV

/gate/physics/Gamma/SetCutInRegion      world 700 um
/gate/physics/Electron/SetCutInRegion   world 700 um
/gate/physics/Positron/SetCutInRegion   world 700 um
/gate/physics/Proton/SetCutInRegion     world 700 um

#/gate/physics/Gamma/SetCutInRegion      waterbox 700 um
#/gate/physics/Electron/SetCutInRegion   waterbox 700 um
#/gate/physics/Positron/SetCutInRegion   waterbox 700 um

#/gate/physics/SetMaxTrackLengthInRegion world 700 um
#/gate/physics/ActivateSpecialCuts psssroton
#/gate/physics/ActivateSpecialCuts gamma
#/gate/physics/ActivateSpecialCuts e+
#/gate/physics/ActivateSpecialCuts e-

#/gate/physics/SetMaxStepSizeInRegion world 1 mm
#/gate/physics/ActivateStepLimiter proton
#/gate/physics/ActivateStepLimiter deuteron
#/gate/physics/ActivateStepLimiter triton
#/gate/physics/ActivateStepLimiter alpha
#/gate/physics/ActivateStepLimiter GenericIon

/gate/physics/displayCuts


#=====================================================
# OUTPUT
#=====================================================

/gate/actor/addActor              SimulationStatisticActor stat
/gate/actor/stat/save             output/stat.txt

/gate/actor/addActor                     DoseActor  dose3d
/gate/actor/dose3d/save                  output/output.mhd
/gate/actor/dose3d/attachTo    	         waterbox
/gate/actor/dose3d/stepHitType           random
/gate/actor/dose3d/setPosition           0 0 0 cm
/gate/actor/dose3d/setResolution         100 100 100
/gate/actor/dose3d/enableEdep            true
/gate/actor/dose3d/enableUncertaintyEdep true
/gate/actor/dose3d/enableDose            false
/gate/actor/dose3d/enableUncertaintyDose false
/gate/actor/dose3d/enableNumberOfHits    false



#=====================================================
# INITIALISATION
#=====================================================

/gate/run/initialize


#=====================================================
# BEAMS
#=====================================================

/gate/source/addSource mybeam gps

/gate/source/mybeam/gps/particle proton
/gate/source/mybeam/gps/pos/type Beam
/gate/source/mybeam/gps/pos/rot1 0 1 0
/gate/source/mybeam/gps/pos/rot2 1 0 0
/gate/source/mybeam/gps/pos/shape Circle
/gate/source/mybeam/gps/pos/centre 0 0 0 mm
/gate/source/mybeam/gps/pos/radius 10 mm
/gate/source/mybeam/gps/ene/mono 150 MeV
/gate/source/mybeam/gps/direction 0 0 1

#=====================================================
# VISUALISATION
#=====================================================

#/control/execute mac/visu.mac

#=====================================================
# START BEAMS
#=====================================================

# JamesRandom Ranlux64 MersenneTwister
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed 123456

/run/verbose 1
# /gate/random/verbose 1
# /gate/source/verbose 0

# to check Steplimiter
#/tracking/verbose 1

/gate/application/noGlobalOutput
/gate/application/setTotalNumberOfPrimaries 50000
#000
/gate/application/start

exit
